<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Logs a timestamped harp data stream, splitting initial state and registers into separate files.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Read</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LogName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarp.bonsai">
        <LogName />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Data</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageType</Selector>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="harp:MessageType">
                <Value>Read</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="C:\dev\CoenLab\bonsai-workflows\logging\LogHarpDemux.bonsai">
        <LogName>Behavior</LogName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>